[
    {
        "object.className": "ProtImportTomograms",
        "object.id": "2",
        "object.label": "Import simulated tomograms",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "~/TemplateLearning/results/tomograms/",
        "filesPattern": "*.mrc",
        "copyFiles": false,
        "samplingRate": 8.0,
        "importAcquisitionFrom": 0,
        "acquisitionData": null,
        "acquisitionAngleMax": 60.0,
        "acquisitionAngleMin": -60.0,
        "step": null,
        "angleAxis1": null,
        "angleAxis2": null,
        "setOrigCoord": false,
        "fromMrcHeader": false,
        "x": null,
        "y": null,
        "z": null
    },
    {
        "object.className": "ProtImportCoordinates3D",
        "object.id": "49",
        "object.label": "Import template coordinates",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 1,
        "filesPath": "~/TemplateLearning/results/coordinates/",
        "filesPattern": "*.txt",
        "copyFiles": false,
        "samplingRate": 8.0,
        "boxSize": 20,
        "shiftX": 0,
        "shiftY": 0,
        "shiftZ": 0,
        "importTomograms": "2.Tomograms"
    },
    {
        "object.className": "ProtImportTomomasks",
        "object.id": "90",
        "object.label": "Import corresponding segmentations",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "~/TemplateLearning/results/segmentations/",
        "filesPattern": "*.mrc",
        "copyFiles": false,
        "inputTomos": "2.Tomograms"
    },
    {
        "object.className": "ProtSubSet",
        "object.id": "126",
        "object.label": "Take one tomogram for validation",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "chooseAtRandom": true,
        "nElements": 1,
        "selectIds": false,
        "range": null,
        "setOperation": 0,
        "inputFullSet": "90.outputTomoMasks"
    },
    {
        "object.className": "ProtSubSet",
        "object.id": "165",
        "object.label": "The rest of tomograms for training",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "chooseAtRandom": false,
        "nElements": 2,
        "selectIds": false,
        "range": null,
        "setOperation": 1,
        "inputFullSet": "90.outputTomoMasks",
        "inputSubSet": "126.outputTomoMasks"
    },
    {
        "object.className": "DeepFinderTrain",
        "object.id": "204",
        "object.label": "deepfinder - train (default parameters)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "psize": 2,
        "bsize": 25,
        "epochs": 500,
        "stepsPerE": 100,
        "stepsPerV": 10,
        "bootstrap": true,
        "rndShift": 13,
        "gpuList": "0",
        "coord": "49.outputCoordinates",
        "tomoMasksValid": "126.outputTomoMasks",
        "tomoMasksTrain": "165.outputTomoMasks"
    },
    {
        "object.className": "DeepFinderSegment",
        "object.id": "248",
        "object.label": "Apply the model to segment your data",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "psize": 120,
        "gpuList": "0",
        "weights": "204.netWeights",
        "inputTomograms": "284.Tomograms"
    },
    {
        "object.className": "ProtImportTomograms",
        "object.id": "284",
        "object.label": "Import your tomograms to be picked",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "importFrom": 0,
        "filesPath": "~/mytomograms/",
        "filesPattern": "*.mrc",
        "copyFiles": false,
        "samplingRate": 8.0,
        "importAcquisitionFrom": 0,
        "acquisitionData": null,
        "acquisitionAngleMax": 60.0,
        "acquisitionAngleMin": -60.0,
        "step": null,
        "angleAxis1": null,
        "angleAxis2": null,
        "setOrigCoord": false,
        "fromMrcHeader": false,
        "x": null,
        "y": null,
        "z": null
    },
    {
        "object.className": "DeepFinderCluster",
        "object.id": "333",
        "object.label": "Extract the picked coordinates",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "cradius": 10,
        "inputSegmentations": "248.segmentations"
    }
]